MacroName MakeGridAtlas
###################################
#
# Script to collect a grid atlas
#
# M.Fislage & R. Efremov Nov 2020
#   
# STATUS: functional
#
###################################

# Make a 50x LowMag Grid Atlas of a grid already in the microscope
# SerialEM needs to be in MDS mode before calling the script

# Ensure that tanks are not refilling
CallFunction MyFunctions::WaitForRefillingJ

#Controls if a navigator file is open
ReportIfNavOpen 
   OKBox You need to have a navigator file open. Program will close.
    Exit
endif

#Prepare LowMagMode
GoToLowDoseArea R
RemoveAperture 0
SetLowDoseMode 0
Delay 2 sec
SetBeamBlank 1
SetMag 50
SetPercentC2 100
SetEucentricFocus 
SetSlitIn 0
ScreenUp 

#defines directory for new GridMap based on a K3 detector
UserSetDirectory
OpenNewMontage 7 12 Atlas
SetMontageParams 1 950 950 2748 2024 0 2

#Performs Montage
MoveStageTo 0 0
SetColumnOrGunValve 1
SetBeamBlank 0
M
NewMap

#Return to LowDoseMode
SetLowDoseMode 1
GoToLowDoseArea R
ReInsertAperture 0
CloseFile 
SaveNavigator
